PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = delaydiscounting
  keyboardBackend = ioHub
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or" + " GBP " + str(future_reward) + " after " + str(delay) + " days"
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/Vinisha/Desktop/Lab in psychology/conditions files/discounting.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 11, 'future_reward': 30, 'delay': 7},
      {'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'reward_today': 27, 'future_reward': 50, 'delay': 21},
      {'reward_today': 40, 'future_reward': 55, 'delay': 62},
      {'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'reward_today': 67, 'future_reward': 75, 'delay': 119},
      {'reward_today': 78, 'future_reward': 80, 'delay': 162},
      {'reward_today': 15, 'future_reward': 43, 'delay': 89},
      {'reward_today': 29, 'future_reward': 50, 'delay': 114},
      {'reward_today': 5, 'future_reward': 77, 'delay': 20},
      {'reward_today': 30, 'future_reward': 45, 'delay': 2},
      {'reward_today': 9, 'future_reward': 56, 'delay': 30},
      {'reward_today': 40, 'future_reward': 59, 'delay': 125},
      {'reward_today': 19, 'future_reward': 30, 'delay': 40},
      {'reward_today': 36, 'future_reward': 48, 'delay': 45},
      {'reward_today': 20, 'future_reward': 50, 'delay': 9},
      {'reward_today': 40, 'future_reward': 68, 'delay': 6},
      {'reward_today': 33, 'future_reward': 50, 'delay': 90},
      {'reward_today': 50, 'future_reward': 78, 'delay': 17},
      {'reward_today': 22, 'future_reward': 59, 'delay': 67}]
    Routine trial
  LoopTerminator trials
